<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:UclOpenHfVisualDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:zg="clr-namespace:Bonsai.Gui.ZedGraph;assembly=Bonsai.Gui.ZedGraph"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:UclOpen.Core;assembly=UclOpen.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionPath" />
        <Property Name="RigPath" />
        <Property Name="TaskPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:ReadSchemas.bonsai">
        <SessionPath>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\UclOpenSession.json</SessionPath>
        <RigPath>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\UclOpenHfVisualRig.json</RigPath>
        <TaskPath>C:\Users\neurogears\source\repos\ucl-open\hf-visual\local\UclOpenHfVisualTaskLogic.json</TaskPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenSession" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenHfVisualRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenHfVisualTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StopExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>CurrentTexture</rx:Name>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Arduino</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" Selector="PortName" />
                <Property Name="BaudRate" Selector="BaudRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>SerialDevice</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="BaudRate" />
                    <Property Name="Encoding" />
                    <Property Name="NewLine" />
                    <Property Name="Parity" />
                    <Property Name="ParityReplace" />
                    <Property Name="DataBits" />
                    <Property Name="StopBits" />
                    <Property Name="Handshake" />
                    <Property Name="DiscardNull" />
                    <Property Name="DtrEnable" />
                    <Property Name="RtsEnable" />
                    <Property Name="ReadBufferSize" />
                    <Property Name="WriteBufferSize" />
                    <Property Name="ReceivedBytesThreshold" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Name" Description="Name of this serial device" Category="Connection" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Arduino</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="PortName" Description="The COM port for this serial device" Category="Connection" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:CreateSerialPort">
                      <port:Name>Arduino</port:Name>
                      <port:PortName>COM10</port:PortName>
                      <port:BaudRate>1000000</port:BaudRate>
                      <port:NewLine>
\n</port:NewLine>
                      <port:Parity>None</port:Parity>
                      <port:ParityReplace>63</port:ParityReplace>
                      <port:DataBits>8</port:DataBits>
                      <port:StopBits>One</port:StopBits>
                      <port:Handshake>None</port:Handshake>
                      <port:DiscardNull>false</port:DiscardNull>
                      <port:DtrEnable>false</port:DtrEnable>
                      <port:RtsEnable>false</port:RtsEnable>
                      <port:ReadBufferSize>4096</port:ReadBufferSize>
                      <port:WriteBufferSize>2048</port:WriteBufferSize>
                      <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>Read</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>portname</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>portname</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PortName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="port:SerialReadLine">
                            <port:PortName>Arduino</port:PortName>
                            <port:NewLine>\n</port:NewLine>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="SerialMessagesSubjectName" Description="The name of the subject that carries serial messages from the serial device" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>MatrixMessages</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="SerialCommandsSubjectName" Description="The name of the subject that carries serial commands to the serial device" Category="Subjects" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject" TypeArguments="sys:String">
                    <rx:Name>MatrixCommands</rx:Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="port:SerialWriteLine">
                      <port:PortName>Arduino</port:PortName>
                      <port:NewLine>\n</port:NewLine>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="2" To="6" Label="Source2" />
                  <Edge From="2" To="12" Label="Source1" />
                  <Edge From="3" To="5" Label="Source2" />
                  <Edge From="4" To="5" Label="Source3" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="9" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RigSchema</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>ArduinoPhotodiode</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="PortName" Selector="PortName" />
                  <Property Name="BaudRate" Selector="BaudRate" />
                  <Property Name="NewLine" Selector="NewLine" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="IncludeWorkflow" Path="UclOpen.Devices:SerialDevice.bonsai">
                <BaudRate>1000000</BaudRate>
                <Encoding xsi:nil="true" />
                <NewLine />
                <Parity>None</Parity>
                <ParityReplace>63</ParityReplace>
                <DataBits>8</DataBits>
                <StopBits>One</StopBits>
                <Handshake>None</Handshake>
                <DiscardNull>false</DiscardNull>
                <DtrEnable>false</DtrEnable>
                <RtsEnable>false</RtsEnable>
                <ReadBufferSize>4096</ReadBufferSize>
                <WriteBufferSize>2048</WriteBufferSize>
                <ReceivedBytesThreshold>1</ReceivedBytesThreshold>
                <Name>Arduino</Name>
                <PortName>COM10</PortName>
                <SerialMessagesSubjectName>PhotodiodeMessages</SerialMessagesSubjectName>
                <SerialCommandsSubjectName>PhotodiodeCommands</SerialCommandsSubjectName>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>PhotodiodeMessages</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="p3:ParseMatrixPhotodiodeSerialDevice" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>MatrixPhotodiode</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixMessages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:ParseMatrixSerialDevice" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Display</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DisplayDevice" Selector="DisplayIndex" />
                      <Property Name="TargetUpdateFrequency" Selector="TargetUpdateFrequency" />
                      <Property Name="TargetRenderFrequency" Selector="TargetRenderFrequency" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen.Calibration</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>main</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Intrinsics.FrameWidth</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Width" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen.Calibration</Selector>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>main</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Intrinsics.FrameHeight</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Height" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>640</gl:Width>
                      <gl:Height>480</gl:Height>
                      <gl:VSync>On</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Black</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>true</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Resizable</gl:WindowBorder>
                      <gl:WindowState>Normal</gl:WindowState>
                      <gl:DisplayDevice>Second</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                      <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>2</gl:Buffers>
                        <gl:Stereo>false</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Screen.TextureAssetsDirectory</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Path" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>TODO</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LoadTextureBank</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Path" />
                          <Property Name="SearchPattern" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="io:GetFiles">
                            <io:Path>../textures</io:Path>
                            <io:SearchPattern>*.tif</io:SearchPattern>
                            <io:SearchOption>TopDirectoryOnly</io:SearchOption>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="rx:CreateObservable">
                          <Name>LoadTexture</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>TexturePath</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TexturePath</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="io:GetFileNameWithoutExtension" />
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TexturePath</Name>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="FileName" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="gl:LoadImage">
                                  <gl:Width xsi:nil="true" />
                                  <gl:Height xsi:nil="true" />
                                  <gl:InternalFormat>Rgba</gl:InternalFormat>
                                  <gl:WrapS>Repeat</gl:WrapS>
                                  <gl:WrapT>Repeat</gl:WrapT>
                                  <gl:MinFilter>Linear</gl:MinFilter>
                                  <gl:MagFilter>Linear</gl:MagFilter>
                                  <gl:FileName>../textures\SynthIm_42_5.tif</gl:FileName>
                                  <gl:ColorType>Unchanged</gl:ColorType>
                                  <gl:FlipMode>Vertical</gl:FlipMode>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="8" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="rx:ToDictionary">
                          <rx:KeySelector>Item1</rx:KeySelector>
                          <rx:ElementSelector>Item2</rx:ElementSelector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="TextureBank" />
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>TextureBank</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
                    <Left>-1</Left>
                    <Right>1</Right>
                    <Bottom>-1</Bottom>
                    <Top>1</Top>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:DrawFramebuffer">
                      <gl:RenderState />
                      <gl:FramebufferAttachments />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:ReadPixels">
                      <gl:RegionOfInterest xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>DebugView</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <TextureName />
                    <ExtentX>2</ExtentX>
                    <ExtentY>2</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>DrawCall</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SyncQuadColor</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it ? 1.0 : 0.0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="Item2" />
                      <Property Name="ColorG" Selector="Item2" />
                      <Property Name="ColorB" Selector="Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>SyncQuad</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" Selector="ExtentX" />
                      <Property Name="ExtentY" Selector="ExtentY" />
                      <Property Name="LocationX" Selector="LocationX" />
                      <Property Name="LocationY" Selector="LocationY" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>0.1</ExtentX>
                    <ExtentY>0.1</ExtentY>
                    <LocationX>1</LocationX>
                    <LocationY>1</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>SyncQuadColor</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="13" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="13" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source3" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="20" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="29" To="32" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="37" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="38" To="39" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AvailableTextures</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:SelectPermutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TextureBank</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>PresentationSequence</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TextureName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TextureBank</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>InterPresentationTexture</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>blankStim_1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Image</gl:ShaderName>
                      <gl:TextureName />
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdateSyncQuad</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>false</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SyncQuadColor</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdateCurrentTexture</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>InterPresentationTexture</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>CurrentTexture</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>InterPresentationTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TextureBank</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TextureName</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="StringProperty">
                      <Value>SynthIm_1_1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:BindTexture">
                      <gl:TextureSlot>Texture0</gl:TextureSlot>
                      <gl:ShaderName>Image</gl:ShaderName>
                      <gl:TextureName />
                      <gl:TextureTarget>Texture2D</gl:TextureTarget>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdateSyncQuad</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Value" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SyncQuadColor</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Name>UpdateCurrentTexture</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TextureName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>CurrentTexture</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>PresentationTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="7" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="15" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="17" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="21" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source2" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="29" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>StartButton</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Start</gui:Text>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>StartExperiment</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>StartExperiment</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>StopButton</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Stop</gui:Text>
            </Expression>
            <Expression xsi:type="rx:Sink">
              <Name>StopExperiment</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>StopExperiment</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ExperimentControls</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>ExperimentControls</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Experiment Controls</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentTexture</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>CurrentTexture</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Current Texture</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.EncoderCount</Selector>
            </Expression>
            <Expression xsi:type="zg:RollingGraphBuilder">
              <zg:SymbolType>None</zg:SymbolType>
              <zg:LineWidth>2</zg:LineWidth>
              <zg:CurveSettings />
              <zg:Capacity xsi:nil="true" />
              <zg:Min xsi:nil="true" />
              <zg:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Encoder</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Encoder</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.LastSyncPulseTime</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="zg:RollingGraphBuilder">
              <zg:SymbolType>None</zg:SymbolType>
              <zg:LineWidth>2</zg:LineWidth>
              <zg:CurveSettings />
              <zg:Capacity xsi:nil="true" />
              <zg:Min xsi:nil="true" />
              <zg:Max xsi:nil="true" />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>SyncPulse</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Sync Pulse</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>DebugView</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Display</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Display</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.PhotodiodeVal</Selector>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:GroupBoxBuilder">
              <gui:Name>Photodiode</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Photodiode</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Name>ExperimentPanel</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>3</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="6" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="39" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="39" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="39" Label="Source3" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="39" Label="Source4" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="39" Label="Source5" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source6" />
            <Edge From="39" To="40" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoggingRootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnimalId</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SubjectId" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionId</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionId" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogController.bonsai">
              <SubjectId>Plimbo</SubjectId>
              <SessionId>001</SessionId>
              <Path>C:/Users/neurogears/source/repos/ucl-open/hf-visual/temp_data</Path>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
              <LogName />
              <Selector>Seconds</Selector>
              <Extension>csv</Extension>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MatrixPhotodiode</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>MatrixArduino</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>Seconds</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:WithLatestFrom" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="harp:CreateTimestamped" />
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="GroupWorkflow">
                <Name>LogData</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Name" />
                      <Property Name="Extension" />
                    </Expression>
                    <Expression xsi:type="GroupWorkflow">
                      <Name>FormatFileName</Name>
                      <Description>Generates a log filename based on the input timestamp.</Description>
                      <Workflow>
                        <Nodes>
                          <Expression xsi:type="SubscribeSubject">
                            <Name>PathPrefix</Name>
                          </Expression>
                          <Expression xsi:type="WorkflowInput">
                            <Name>Source1</Name>
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="StringProperty">
                              <Value>ArduinoPhotodiode</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="p4:StripSubstring" />
                          </Expression>
                          <Expression xsi:type="ExternalizedMapping">
                            <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="StringProperty">
                              <Value>csv</Value>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Take">
                              <rx:Count>1</rx:Count>
                            </Combinator>
                          </Expression>
                          <Expression xsi:type="Combinator">
                            <Combinator xsi:type="rx:Zip" />
                          </Expression>
                          <Expression xsi:type="Format">
                            <Format>{0}\{1}\{2}.{3}</Format>
                            <Selector>Item1,Item2,Item3,Item4</Selector>
                          </Expression>
                          <Expression xsi:type="WorkflowOutput" />
                        </Nodes>
                        <Edges>
                          <Edge From="0" To="9" Label="Source1" />
                          <Edge From="1" To="3" Label="Source1" />
                          <Edge From="2" To="3" Label="Source2" />
                          <Edge From="3" To="4" Label="Source1" />
                          <Edge From="4" To="5" Label="Source1" />
                          <Edge From="4" To="9" Label="Source3" />
                          <Edge From="5" To="9" Label="Source2" />
                          <Edge From="6" To="7" Label="Source1" />
                          <Edge From="7" To="8" Label="Source1" />
                          <Edge From="8" To="9" Label="Source4" />
                          <Edge From="9" To="10" Label="Source1" />
                          <Edge From="10" To="11" Label="Source1" />
                        </Edges>
                      </Workflow>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="FileName" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Selector" />
                    </Expression>
                    <Expression xsi:type="io:CsvWriter">
                      <io:FileName>C:/Users/neurogears/source/repos/ucl-open/hf-visual/temp_data\sub-Plimbo\ses-001_date-2025-12-11T16-11-23\Arduino\Arduino.csv</io:FileName>
                      <io:Append>false</io:Append>
                      <io:Overwrite>false</io:Overwrite>
                      <io:Suffix>None</io:Suffix>
                      <io:IncludeHeader>true</io:IncludeHeader>
                      <io:Selector>it</io:Selector>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="5" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="5" Label="Source2" />
                    <Edge From="4" To="5" Label="Source3" />
                    <Edge From="5" To="6" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentTexture</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MatrixArduino</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogData.bonsai">
              <LogName />
              <Selector>Seconds</Selector>
              <Extension>csv</Extension>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogDataSchema.bonsai">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogDataSchema.bonsai">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\LogDataSchema.bonsai">
              <Name>SessionSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="21" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>